# Config file for testing
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    laser532:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'
        #uncomment when activating
        #module.class: 'laser.laserquantum_laser.LaserQuantumLaser'
        #interface: 'ASRL1::INSTR'
        maxpower: 0.800 # in Watt
        #psu: 'SMD6000'

    confocal:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit'

    counterAPD1:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        #photon_source2: '/Dev1/PFI9'

logic:
    laser532logic:
        module.Class: 'laser_logic.LaserLogic'
        connect:
            laser: 'laser532'

    #kernellogic:
    #    module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
    #    remoteaccess: True

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'counterAPD1'
            savelogic: 'save'

    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'confocal'
            savelogic: 'save'

    optimiser:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'confocal'
            fitlogic: 'fit'

    #poimanager:
    #    module.Class: 'poi_manager_logic.PoiManagerLogic'
    #    connect:
    #        scannerlogic: 'scanner'
    #        savelogic: 'save'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    laser532gui:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laser532logic'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner'
            savelogic: 'save'
            optimizerlogic1: 'optimiser'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    #poimanagergui:
     #   module.Class: 'poimanager.poimangui.PoiManagerGui'
      #  connect:
       #     poimanagerlogic1: 'poimanager'
        #    confocallogic1: 'scanner'
